PsychoPy2experiment version="2022.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s' % (expInfo['workID'],expInfo['date'])
  Experiment info = {'workID': '', 'Age': '', 'Gender': '', 'Hours slept (last night)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['sub_encoding0.csv', 'sub_encoding1.csv', 'sub_encoding2.csv', 'sub_encoding3.csv', 'sub_encoding4.csv', 'sub_encoding5.csv', 'sub_encoding6.csv', 'sub_encoding7.csv', 'sub_encoding8.csv', 'sub_encoding9.csv', 'sub_encoding10.csv', 'sub_encoding11.csv', 'sub_encoding12.csv', 'sub_encoding13.csv', 'sub_encoding14.csv', 'sub_encoding15.csv', 'sub_encoding16.csv', 'sub_encoding17.csv', 'sub_encoding18.csv', 'sub_encoding19.csv', 'sub_encoding20.csv', 'sub_encoding21.csv', 'sub_encoding22.csv', 'sub_encoding23.csv', 'sub_encoding24.csv', 'sub_encoding25.csv', 'sub_encoding26.csv', 'sub_encoding27.csv', 'sub_encoding28.csv', 'sub_encoding29.csv', 'sub_test0.csv', 'sub_test1.csv', 'sub_test2.csv', 'sub_test3.csv', 'sub_test4.csv', 'sub_test5.csv', 'sub_test6.csv', 'sub_test7.csv', 'sub_test8.csv', 'sub_test9.csv', 'sub_test10.csv', 'sub_test11.csv', 'sub_test12.csv', 'sub_test13.csv', 'sub_test14.csv', 'sub_test15.csv', 'sub_test16.csv', 'sub_test17.csv', 'sub_test18.csv', 'sub_test19.csv', 'sub_test20.csv', 'sub_test21.csv', 'sub_test22.csv', 'sub_test23.csv', 'sub_test24.csv', 'sub_test25.csv', 'sub_test26.csv', 'sub_test27.csv', 'sub_test28.csv', 'sub_test29.csv', '2237856148-989.jpg', '2237857458-1324.jpg', '2237857458-1325.jpg', '2237858942-299356.jpg', '2237944827-301472.jpg', '2238117096-228518.jpg', '2238328478-11678.jpg', '2238425482-313537.jpg', '2238428357-313623.jpg', '2238434559-90406.jpg', '2238436252-314037.jpg', '2238436322-314047.jpg', '2238471391-240918.jpg', '2238479053-19457.jpg', '2238480278-19661.jpg', '2238480434-93829.jpg', '2238480648-19714.jpg', '2238480677-317399.jpg', '2238480803-19737.jpg', '2238480803-19739.jpg', '2238480980-168129.jpg', '2238481198-19821.jpg', '2238481198-19822.jpg', '2238481198-19823.jpg', '2238481630-168218.jpg', '2238481813-19930.jpg', '2238481928-19949.jpg', '2238499057-320266.jpg', '2238516618-25604.jpg', '2238521193-26285.jpg', '2238531493-28260.jpg', '2238544191-252422.jpg', '2238550049-105691.jpg', '2238550816-254000.jpg', '2238555262-330312.jpg', '2238560245-182099.jpg', '2238563377-332054.jpg', '2238567168-34916.jpg', '2238571930-184143.jpg', '2238572663-35822.jpg', '2238573447-333826.jpg', '2238573546-258454.jpg', '2238577590-185467.jpg', '2238578544-111698.jpg', '2238580740-186218.jpg', '2238584894-113161.jpg', '2274829821-263682.jpg', '2427873763-47290.jpg', '2427873848-47312.jpg', '2427874231-269884.jpg', '2427874554-121863.jpg', '2446758985-197609.jpg', '2446758985-197610.jpg', '2446759306-271734.jpg', '2446759803-49249.jpg', '2446759803-49250.jpg', '2446759803-49251.jpg', '2446760601-272099.jpg', '2446760917-347439.jpg', '2446761374-124213.jpg', '2449442529-124445.jpg', '2449442529-124446.jpg', '2452380166-273109.jpg', '2452380166-273110.jpg', '2452380171-273112.jpg', '2452380832-348593.jpg', '2452381505-199546.jpg', '2458347252-348911.jpg', '2458347385-199723.jpg', '2458348012-349114.jpg', '2460547291-274110.jpg', '2460547467-349421.jpg', '2460547467-349422.jpg', '2460547508-51571.jpg', '2460547508-51572.jpg', '2460547536-274179.jpg', '2460547536-274181.jpg', '2460547732-349518.jpg', '2512875587-350044.jpg', '2512875899-126682.jpg', '2512876023-52283.jpg', '2575118671-277663.jpg', '2575120609-129862.jpg', '2575120738-55528.jpg', '2575120738-55529.jpg', '2575121987-353817.jpg', '2575963989-130576.jpg', '2579432519-130698.jpg', '2579432534-130704.jpg', '2592379964-131054.jpg', '2592380177-354626.jpg', '2592380177-354628.jpg', '2592380177-354629.jpg', '2592380255-205553.jpg', '2592380272-354673.jpg', '2611628310-206388.jpg', '2860302315-210704.jpg', '2860312398-62572.jpg', '2862691449-137104.jpg', '2864900319-137787.jpg', '2864900357-361688.jpg', '2864901386-286797.jpg', '2864901420-212147.jpg', '2864902304-137862.jpg', '2864903351-286874.jpg', '2864904453-63933.jpg', '2864906345-212360.jpg', '2864907361-287062.jpg', '2864907432-362042.jpg', '2864909447-362144.jpg', '2864909447-362146.jpg', '2864910426-287204.jpg', '2864911457-362260.jpg', '2868469411-287540.jpg', '2868474407-362883.jpg', '2868474407-362885.jpg', '2868475410-213219.jpg', '2868479517-363220.jpg', '2868487415-213924.jpg', '2874299429-139694.jpg', '2874299429-139695.jpg', '2874301404-139813.jpg', '2874301407-363895.jpg', '2874302418-65978.jpg', '2874302418-65979.jpg', '2874303365-214262.jpg', '2874305405-214397.jpg', '2874307433-66280.jpg', '2874314526-289684.jpg', '2883254439-140940.jpg', '2883255450-215310.jpg', '2883256307-365057.jpg', '2883264367-365620.jpg', '2883266367-365742.jpg', '2883266388-67750.jpg', '2883268412-365898.jpg', '2883268412-365899.jpg', '2883268471-290842.jpg', '2883268471-290843.jpg', '2883273443-68193.jpg', '2898617468-68274.jpg', '2898618327-366317.jpg', '2898618390-216538.jpg', '2898618440-216545.jpg', '2898618440-216547.jpg', '2898618444-142232.jpg', '2898618444-142233.jpg', '2898619327-366362.jpg', '2898621427-366486.jpg', '2898624426-291544.jpg', '2898624426-291546.jpg', '2898625336-291572.jpg', '2898626385-216899.jpg', '2898627427-366763.jpg', '2898628438-68785.jpg', '2898631359-142721.jpg', '2898631394-142727.jpg', '2898631468-68931.jpg', '2898632385-217137.jpg', '2898632385-217138.jpg', '2898632385-217139.jpg', '2898633321-291943.jpg', '2898633421-291973.jpg', '2898633421-291974.jpg', '2898633480-217190.jpg', '2898634397-367080.jpg', '2898635427-367120.jpg', '2898635428-69104.jpg', '2901933328-69192.jpg', '2901933382-367209.jpg', '2901934408-69289.jpg', '2901938432-367627.jpg', '2901938432-367629.jpg', '2901939327-367670.jpg', '2901939379-143479.jpg', '2901939379-143480.jpg', '2901939433-69672.jpg', '2901941401-292798.jpg', '2901941438-69835.jpg', '2901941438-69836.jpg', '2901942428-69919.jpg', '2901942443-69923.jpg', '2901942443-69925.jpg', '2901943387-368037.jpg', '2901943411-292945.jpg', '2901946436-293242.jpg', '2901946439-144040.jpg', '2901946465-218350.jpg', '2901947323-70275.jpg', '2901947423-70310.jpg', '2901947423-70311.jpg', '2901947448-70314.jpg', '2901948383-70363.jpg', '2901948445-218497.jpg', '2901952513-70703.jpg', '2964207374-144577.jpg', '2964210336-293945.jpg', '2964213381-294060.jpg', '2964213381-294061.jpg', '2964216465-219242.jpg', '2964217461-294238.jpg', '2964218374-144967.jpg', '2964218374-144968.jpg', '2964218432-369263.jpg', '2964220333-71258.jpg', '2964222378-71332.jpg', '2964223381-294447.jpg', '2964224310-219528.jpg', '2981229442-369621.jpg', '2981231403-71642.jpg', '2981231422-369714.jpg', '2981231446-294732.jpg', '2981232437-369759.jpg', '2981235446-294900.jpg', '2981235446-294901.jpg', '2981236443-71859.jpg', '2981240424-145794.jpg', '2981240424-145795.jpg', '2981240427-370099.jpg', '2981241414-145842.jpg', '2981241419-145844.jpg', '2981243412-370222.jpg', '2981244394-145974.jpg', '2981244403-72215.jpg', '2981246400-220363.jpg', '2981246400-220365.jpg', '2984615358-72439.jpg', '2984615361-295509.jpg', '2984615361-295510.jpg', '2984626312-370849.jpg', '2984628361-295995.jpg', '2986397322-371109.jpg', '2986408339-146952.jpg', '2986408373-73286.jpg', '2986447306-296584.jpg', '2986447332-371497.jpg', '2986451363-73598.jpg', '2986451363-73599.jpg', '2989726338-74002.jpg', '2994401319-148290.jpg', 'demo_encoding.xlsx', 'demo_test.xlsx', 'demographics1.csv', 'flower1.jpg', 'flower1_pair.jpg', 'flower2.jpg', 'flower2_pair.jpg', 'flower3.jpg', 'flower3_pair.jpg', 'flower4.jpg', 'flower4_pair.jpg', 'flower5.jpg', 'flower5_pair.jpg', 'flower6.jpg', 'flower6_pair.jpg', 'left.jpg', 'memory_pilot_most_recent.psyexp', 'right.jpg']
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = memory_pilot_most_recent
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent EncodingTarget
      image [set every repeat] = $target_image
      size = 0.5
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3.0
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    KeyboardComponent test_encoding_response
      allowedKeys = 'left','right','num_4','num_6'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3.0
      storeCorrect = True
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  Routine end
    TextComponent text_end
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Thank you

        Please press the space bar when you are ready for the next part of the experiment
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine before_test_instructions
    TextComponent text_3
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now your memory for these pictures will be tested:
        A pair of pictures will appear, one is new and the other was previously presented
        Use the corresponding arrow key to select the picture that was previously presented

        Press the spacebar to begin
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine before_exp_instructions
    TextComponent text_4
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Great, you have finished the demo.
        Now the main experiment starts, here are the instructions again:

        Focus on the center of the screen
        A series of pictures will appear, each for several seconds
        Memorize the pictures, your memory will be tested later

        Please press the space bar to begin.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation_cross
    TextComponent cross
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [time (s)] = 0.8
      text = +
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    TextComponent demo_2
      letterHeight = 0.1
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = DEMO
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  Routine before_test_instruc
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the memory test

        For each presented pair of pictures, choose the image that you have seen during the practice.
        To choose the right image,please press the right arrow key.
        To choose the left image, press the left arrow key.

        Please try to make your decision as accurately and quickly as you can.


        To begin press 'space'
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test_trials
    ImageComponent test_image_left
      image [set every repeat] = $image1
      pos = (-0.3, 0)
      saveStartStop = False
      size = 0.5
      startVal [time (s)] = 0.0
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    KeyboardComponent test_test_response
      allowedKeys = 'left','right','num_4','num_6'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent test_image_right
      image [set every repeat] = $image2
      pos = (0.3, 0)
      saveStartStop = False
      size = 0.5
      startVal [time (s)] = 0.0
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  Routine final_screen
    TextComponent text_end_2
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Thank you!

        Your credit code is:

        'tjs'

        Report it in the M-turk platform.


        Please press the space bar to finish.
    KeyboardComponent key_resp_end_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine before_test_instruct2
    TextComponent text_7
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        To select the right image use the right arrow
        To select the left image use the left arrow

        Please press the space bar to begin.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine fixation_cross_real
    TextComponent cross_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [time (s)] = 0.8
      text = +
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  Routine demo_trial
    ImageComponent demo_encoding_image
      image [set every repeat] = $DemoImage
      size = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent demo_15
      letterHeight = 0.1
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = DEMO
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    KeyboardComponent demo_encoding_response
      allowedKeys [set every repeat] = 'left','right','num_4','num_6'
      correctAns = $DemoCorrect
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3.0
      storeCorrect = True
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  Routine demo_test
    ImageComponent demo_test_left
      image [set every repeat] = $DemoImage1
      pos = (-0.3, 0)
      size = 0.5
      startVal [time (s)] = 0.0
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    ImageComponent demo_test_right
      image [set every repeat] = $DemoImage2
      pos = (0.3, 0)
      size = 0.5
      startVal [time (s)] = 0.0
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    KeyboardComponent demo_test_response
      allowedKeys = 'left','right','num_4','num_6'
      correctAns = $DemoCorrectTest
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent demo
      letterHeight = 0.1
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMO
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  Routine slide1
    TextComponent instruc_slide1
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Focus on the center of the screen
        A series of pictures will appear, each for several seconds
        Memorize the pictures, your memory will be tested later

        Please press the space bar to continue.
    KeyboardComponent space_key_reponse
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine slide2
    TextComponent text_6
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Occasionally, when you see and arrow pointing to the right of left:







        Press the corresponding arrow key on your keyboard as fast as you can.

        Please press the space bar to begin
    KeyboardComponent space_key_responce
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent left_arrow
      image = left.jpg
      pos = (-0.1, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent right_arrow
      image = right.jpg
      pos = (0.1, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine slide3
    TextComponent text_2
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you will proceed to several demo trials

        Please press the space bar to begin
    KeyboardComponent space_responce
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine consent
    TextComponent consent_form
      letterHeight = 0.025
      pos = (0, 0.025)
      startVal [time (s)] = 0.0
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      text:
        By pressing 'space' I hereby accept to participate in a visual memory experiment.
        I declare I understood the experiment includes the following parts: Experiment description and instructions, practice phase, study phase and test phase.

        The goal of this study is to examine memory encoding processes.

        Methods: The experiment will be presented on a computer screen. In the first part you will study a series of neutral images and later will be asked to recognize them. Duration: up to 5 minutes. Time to complete the experiment from approval: 24 hours

        Participants: Healthy population (Amazon Mechanical Turk workers)
        Number of subjects: 100
        Side effects or discomfort: none

        Benefit from the experiment: Participants are not expected to gain personal benefit from this experiment. Through this experiment the research team hopes to uncover how human remember visual stimuli.
        Possible risk factors: none

        Voluntary participation: participants are free to quit the experiment at any moment with no penalty, since participation is voluntary.

        Research team is located in Tel Aviv University, and the experimental protocol was approved by its ethics committee.

        By pressing the "I conesnt" button, I hereby declare that I read the above information and agree to participate in this experiment.
    ButtonComponent button
      bold = True
      borderColor = black
      borderWidth = 1
      color = black
      fillColor = (-0.8,0.8,-0.75)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.16,0.05)
      startVal [time (s)] = 0
      text = I consent
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  Routine demographics_form
    FormComponent form
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = C:/Users/User/Desktop/pilot/Outputs/csv and images for demo trials/demographics1.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      pos = (0, 0.1)
      responseColor = white
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button_2
      bold = True
      borderColor = black
      borderWidth = 1
      color = black
      fillColor = yellow
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.1, -0.4)
      size = (0.15,0.07)
      startVal [time (s)] = 0
      text = click here to confirm
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Flow
  Routine consent
  Routine slide1
  Routine slide2
  Routine slide3
  LoopInitiator demo_encoding_loop loopType="TrialHandler"
    conditionsFile = demo_encoding.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'DemoImage': 'flower1.jpg', 'DemoCorrect': None},
      {'DemoImage': 'flower2.jpg', 'DemoCorrect': None},
      {'DemoImage': 'left.jpg', 'DemoCorrect': 'left'},
      {'DemoImage': 'flower3.jpg', 'DemoCorrect': None},
      {'DemoImage': 'flower4.jpg', 'DemoCorrect': None},
      {'DemoImage': 'flower5.jpg', 'DemoCorrect': None},
      {'DemoImage': 'flower6.jpg', 'DemoCorrect': None}]
    Routine demo_trial
    Routine fixation_cross
  LoopTerminator demo_encoding_loop
  Routine before_test_instructions
  LoopInitiator demo_test_loop loopType="TrialHandler"
    conditionsFile = demo_test.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'DemoImage1': 'flower1.jpg', 'DemoImage2': 'flower1_pair.jpg', 'DemoCorrectTest': 'left'},
      {'DemoImage1': 'flower2_pair.jpg', 'DemoImage2': 'flower2.jpg', 'DemoCorrectTest': 'right'},
      {'DemoImage1': 'flower3.jpg', 'DemoImage2': 'flower3_pair.jpg', 'DemoCorrectTest': 'left'},
      {'DemoImage1': 'flower4.jpg', 'DemoImage2': 'flower4_pair.jpg', 'DemoCorrectTest': 'left'},
      {'DemoImage1': 'flower5_pair.jpg', 'DemoImage2': 'flower5.jpg', 'DemoCorrectTest': 'right'},
      {'DemoImage1': 'flower6.jpg', 'DemoImage2': 'flower6_pair.jpg', 'DemoCorrectTest': 'left'}]
    Routine demo_test
  LoopTerminator demo_test_loop
  Routine before_exp_instructions
  Routine slide2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sub_encoding0.csv
    loopType = sequential
    nReps = 1
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    Routine trial
    Routine fixation_cross_real
  LoopTerminator trials
  Routine end
  Routine before_test_instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = sub_test0.csv
    loopType = sequential
    nReps = 1
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    Routine test_trials
  LoopTerminator trials_2
  Routine final_screen
